# Generated by Configurator on Wed Aug 18 17:06:36 EDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM6,SerialManager,COM6
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,LightEngine,Lumencor,LightEngine
Device,XYStage,Prior,XYStage
Device,DIA_Prior_Shutter,Prior,Shutter-1
Device,Multi Shutter,Utilities,Multi Shutter
Device,Prior_Filter_Wheel,Prior,Wheel-1
Device,Lumencore_Filter_Wheel,Prior,Wheel-2
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,LightEngine,Connection,COM5
Property,LightEngine,Model,SOLA
Property,XYStage,Port,COM3
Property,DIA_Prior_Shutter,Port,COM3
Property,Prior_Filter_Wheel,Port,COM3
Property,Lumencore_Filter_Wheel,Port,COM3

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIDiaLamp,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TIAnalyzer,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Multi Shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Unknown
Label,TINosePiece,2,3-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,1,2-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,0,1-Apo TIRF 100x NA 1.49 Oil
# TIFilterBlock1
Label,TIFilterBlock1,5,6-ANALY
Label,TIFilterBlock1,4,5------
Label,TIFilterBlock1,3,4-RFP
Label,TIFilterBlock1,2,3------
Label,TIFilterBlock1,1,2-GFP
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Prior_Filter_Wheel
Label,Prior_Filter_Wheel,9,RFP
Label,Prior_Filter_Wheel,8,Filter-9
Label,Prior_Filter_Wheel,7,Filter-8
Label,Prior_Filter_Wheel,6,Filter-7
Label,Prior_Filter_Wheel,5,Filter-6
Label,Prior_Filter_Wheel,4,Filter-5
Label,Prior_Filter_Wheel,3,Filter-4
Label,Prior_Filter_Wheel,2,Filter-3
Label,Prior_Filter_Wheel,1,Filter-2
Label,Prior_Filter_Wheel,0,GFP
# Lumencore_Filter_Wheel
Label,Lumencore_Filter_Wheel,9,Filter-10
Label,Lumencore_Filter_Wheel,8,Filter-9
Label,Lumencore_Filter_Wheel,7,Filter-8
Label,Lumencore_Filter_Wheel,6,Filter-7
Label,Lumencore_Filter_Wheel,5,Filter-6
Label,Lumencore_Filter_Wheel,4,Filter-5
Label,Lumencore_Filter_Wheel,3,for GFP
Label,Lumencore_Filter_Wheel,2,for RFP
Label,Lumencore_Filter_Wheel,1,Filter-2
Label,Lumencore_Filter_Wheel,0,Filter-1

# Configuration presets
# Group: Channel
# Preset: RFP
ConfigGroup,Channel,RFP,TIFilterBlock1,Label,4-RFP
ConfigGroup,Channel,RFP,LightEngine,WHITE,1
ConfigGroup,Channel,RFP,Multi Shutter,Physical Shutter 1,LightEngine
ConfigGroup,Channel,RFP,Multi Shutter,Physical Shutter 2,Undefined
ConfigGroup,Channel,RFP,Multi Shutter,Physical Shutter 3,Undefined
ConfigGroup,Channel,RFP,Multi Shutter,Physical Shutter 4,Undefined
ConfigGroup,Channel,RFP,Multi Shutter,Physical Shutter 5,Undefined
ConfigGroup,Channel,RFP,Prior_Filter_Wheel,Label,RFP
ConfigGroup,Channel,RFP,Lumencore_Filter_Wheel,Label,for RFP
ConfigGroup,Channel,RFP,TIDiaLamp,Intensity,0
ConfigGroup,Channel,RFP,LightEngine,WHITE_Intensity,10

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,2-GFP
ConfigGroup,Channel,GFP,Multi Shutter,Physical Shutter 1,LightEngine
ConfigGroup,Channel,GFP,Multi Shutter,Physical Shutter 2,Undefined
ConfigGroup,Channel,GFP,Multi Shutter,Physical Shutter 3,Undefined
ConfigGroup,Channel,GFP,Multi Shutter,Physical Shutter 4,Undefined
ConfigGroup,Channel,GFP,Multi Shutter,Physical Shutter 5,Undefined
ConfigGroup,Channel,GFP,Prior_Filter_Wheel,Label,GFP
ConfigGroup,Channel,GFP,Lumencore_Filter_Wheel,Label,for GFP
ConfigGroup,Channel,GFP,LightEngine,WHITE,1
ConfigGroup,Channel,GFP,TIDiaLamp,Intensity,0
ConfigGroup,Channel,GFP,LightEngine,WHITE_Intensity,10

# Preset: Brightfield
ConfigGroup,Channel,Brightfield,TIFilterBlock1,Label,6-ANALY
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 1,DIA_Prior_Shutter
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 2,TIDiaLamp
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 3,Undefined
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 4,Undefined
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 5,Undefined
ConfigGroup,Channel,Brightfield,Prior_Filter_Wheel,Label,Filter-9
ConfigGroup,Channel,Brightfield,Lumencore_Filter_Wheel,Label,Filter-1
ConfigGroup,Channel,Brightfield,LightEngine,WHITE,0
ConfigGroup,Channel,Brightfield,TIDiaLamp,Intensity,15
ConfigGroup,Channel,Brightfield,LightEngine,WHITE_Intensity,0


# Group: lumencor
# Preset: NewPreset
ConfigGroup,lumencor,NewPreset,LightEngine,WHITE_Intensity,10


# Group: DIA
# Preset: NewPreset
ConfigGroup,DIA,NewPreset,TIDiaLamp,Intensity,10



# PixelSize settings

