# Generated by Configurator on Sat Sep 04 08:37:32 EDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Camera,DemoCamera,DCam
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,Z,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XY,DemoCamera,DXYStage
Device,Shutter,DemoCamera,DShutter
Device,Autofocus,DemoCamera,DAutoFocus

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Camera,DHub
Parent,Dichroic,DHub
Parent,Emission,DHub
Parent,Excitation,DHub
Parent,Objective,DHub
Parent,Z,DHub
Parent,Path,DHub
Parent,XY,DHub
Parent,Shutter,DHub
Parent,Autofocus,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Z,0

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,Shutter
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Dichroic
Label,Dichroic,9,State-9
Label,Dichroic,8,State-8
Label,Dichroic,7,State-7
Label,Dichroic,6,State-6
Label,Dichroic,5,State-5
Label,Dichroic,4,State-4
Label,Dichroic,3,State-3
Label,Dichroic,2,Q585LP
Label,Dichroic,1,Q505LP
Label,Dichroic,0,400DCLP
# Emission
Label,Emission,9,State-9
Label,Emission,8,State-8
Label,Emission,7,State-7
Label,Emission,6,State-6
Label,Emission,5,State-5
Label,Emission,4,State-4
Label,Emission,3,Chroma-HQ700
Label,Emission,2,Chroma-HQ535
Label,Emission,1,Chroma-D460
Label,Emission,0,Chroma-HQ620
# Excitation
Label,Excitation,9,State-9
Label,Excitation,8,State-8
Label,Excitation,7,State-7
Label,Excitation,6,State-6
Label,Excitation,5,State-5
Label,Excitation,4,State-4
Label,Excitation,3,Chroma-HQ620
Label,Excitation,2,Chroma-HQ570
Label,Excitation,1,Chroma-HQ480
Label,Excitation,0,Chroma-D360
# Objective
Label,Objective,5,Objective-5
Label,Objective,4,Objective-4
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,2,Objective-2
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,0,Nikon 40X Plan Flueor ELWD
# Path
Label,Path,2,State-2
Label,Path,1,State-1
Label,Path,0,State-0

# Configuration presets
# Group: Camera
# Preset: MedRes
ConfigGroup,Camera,MedRes,Camera,Binning,2
ConfigGroup,Camera,MedRes,Camera,BitDepth,10

# Preset: HighRes
ConfigGroup,Camera,HighRes,Camera,Binning,1
ConfigGroup,Camera,HighRes,Camera,BitDepth,12

# Preset: LowRes
ConfigGroup,Camera,LowRes,Camera,Binning,4
ConfigGroup,Camera,LowRes,Camera,BitDepth,8


# Group: Objective
# Preset: Objective-4
ConfigGroup,Objective,Objective-4,Objective,Label,Objective-4

# Preset: Objective-2
ConfigGroup,Objective,Objective-2,Objective,Label,Objective-2

# Preset: Nikon 40X Plan Flueor ELWD
ConfigGroup,Objective,Nikon 40X Plan Flueor ELWD,Objective,Label,Nikon 40X Plan Flueor ELWD

# Preset: Nikon 10X S Fluor
ConfigGroup,Objective,Nikon 10X S Fluor,Objective,Label,Nikon 10X S Fluor

# Preset: Nikon 20X Plan Fluor ELWD
ConfigGroup,Objective,Nikon 20X Plan Fluor ELWD,Objective,Label,Nikon 20X Plan Fluor ELWD

# Preset: Objective-5
ConfigGroup,Objective,Objective-5,Objective,Label,Objective-5


# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Dichroic,Label,Q505LP
ConfigGroup,Channel,FITC,Emission,Label,Chroma-HQ535
ConfigGroup,Channel,FITC,Excitation,Label,Chroma-HQ480
ConfigGroup,Channel,FITC,Camera,Mode,Artificial Waves

# Preset: Rhodamine
ConfigGroup,Channel,Rhodamine,Dichroic,Label,Q585LP
ConfigGroup,Channel,Rhodamine,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Rhodamine,Excitation,Label,Chroma-HQ570

# Preset: DAPI
ConfigGroup,Channel,DAPI,Dichroic,Label,400DCLP
ConfigGroup,Channel,DAPI,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,DAPI,Excitation,Label,Chroma-D360
ConfigGroup,Channel,DAPI,Camera,Mode,Color Test Pattern

# Preset: Cy5
ConfigGroup,Channel,Cy5,Dichroic,Label,400DCLP
ConfigGroup,Channel,Cy5,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Cy5,Excitation,Label,Chroma-HQ570

# Preset: Cy3
ConfigGroup,Channel,Cy3,Camera,Mode,Noise


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,BitDepth,16
ConfigGroup,System,Startup,Camera,ScanMode,1
ConfigGroup,System,Startup,Objective,Label,Nikon 10X S Fluor
ConfigGroup,System,Startup,Camera,Binning,1
ConfigGroup,System,Startup,Core,ChannelGroup,Channel


# Group: LightPath
# Preset: Camera-left
ConfigGroup,LightPath,Camera-left,Path,State,1

# Preset: Eyepiece
ConfigGroup,LightPath,Eyepiece,Path,State,0

# Preset: Camera-right
ConfigGroup,LightPath,Camera-right,Path,State,2



# PixelSize settings
# Resolution preset: Res20x
ConfigPixelSize,Res20x,Objective,Label,Nikon 20X Plan Fluor ELWD
PixelSize_um,Res20x,0.5
PixelSizeAffine,Res20x,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: Res40x
ConfigPixelSize,Res40x,Objective,Label,Nikon 40X Plan Flueor ELWD
PixelSize_um,Res40x,0.25
PixelSizeAffine,Res40x,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: Res10x
ConfigPixelSize,Res10x,Objective,Label,Nikon 10X S Fluor
PixelSize_um,Res10x,1.0
PixelSizeAffine,Res10x,1.0,0.0,0.0,0.0,1.0,0.0
